PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1728, 1117]
  expName = nature-urban-fractal
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine control_video
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    MovieComponent control_video_component
      backend = ffpyplayer
      forceEndRoutine = True
      movie = stimuli/videos/control.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 22
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    MarkEvents MarkEvents plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = control_video_component
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useQuitKeys = True
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  Routine parent_video
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    MovieComponent parent_video_component
      backend = ffpyplayer
      forceEndRoutine = False
      movie = stimuli/videos/control.mp4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 22
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    MarkEvents MarkEvents_2 plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = parent_video_component
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = condition
      useQuitKeys = True
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  Routine slideshow
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    ImageComponent image
      image [set every repeat] = $"stimuli/images/" + condition + "/" + image_name + ".jpg"
      size = (0.5, 0.5)
      startVal [time (s)] = .2
      stopVal [duration (s)] = 2
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    MarkEvents MarkEvents_3 plugin="psychopy-eyelink"
      componentsForEyeLinkStimEventMessages = image
      includeAllEventMarkedComponentsForDVDrawingMessages = True
      includeAllEventMarkedComponentsForIAMessages = True
      interestAreaMargins = 0
      interestAreaShape = Rectangle
      sendTrialOnsetOffsetMessages = False
      sendVideoFrameMessages = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      trialConditionVariablesForEyeLinkLogging = condition, image_name
      useQuitKeys = True
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  Routine fixation
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine eyelink_setup
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    InitializeConnection Initialize plugin="psychopy-eyelink"
      disableEyeLinkAudio = False
      dummyMode = True
      hostAddress = 100.1.1.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      useCustomHostIP = False
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    CameraSetup CameraSetup plugin="psychopy-eyelink"
      backgroundColor = win.color
      calibrationFilenames = 'qbeep.wav','type.wav','error.wav'
      calibrationSounds = defaults
      calibrationType = HV9
      foregroundColor = (1,1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetSize = 24
      targetType = circle
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  Routine intro
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment

        Press SPACEBAR to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine eyelink_start
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    HostDrawing HostDrawing plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = control_video_component
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    DriftCheck DriftCheck plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetPosition = [0,0]
      targetSize = 24
      targetType = circle
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    StartRecording StartRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eyelink_stop
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    StopRecording StopRecord plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eyelink_start_2
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    HostDrawing HostDrawing_2 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = parent_video_component
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    DriftCheck DriftCheck_2 plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetPosition = [0,0]
      targetSize = 24
      targetType = circle
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    StartRecording StartRecord_2 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine eyelink_start_image
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    HostDrawing HostDrawing_3 plugin="psychopy-eyelink"
      componentsForDrawingToHostBackdrop = image
      imagesToHostBackdrop = $"stimuli/images/" + condition + "/" + image_name + ".jpg", image
      recordStatusMessage = "Trial %s" % image_loop.thisN
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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    DriftCheck DriftCheck_3 plugin="psychopy-eyelink"
      backgroundColor = win.color
      driftCheckFilenames = 'qbeep.wav','type.wav','error.wav'
      driftCheckSounds = defaults
      foregroundColor = (1,1,1)
      screenUnitType = pix
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
      targetPosition = [0,0]
      targetSize = 24
      targetType = circle
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    StartRecording StartRecord_3 plugin="psychopy-eyelink"
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.001
      syncScreenRefresh = False
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  Routine end_experiment
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    TextComponent fin_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = The experiment is now over, please contact the experimenter
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  Routine clapperboard
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    TextComponent one
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent two
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent three
      letterHeight = 0.05
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent exit_sync_instr
      letterHeight = 0.05
      startVal [time (s)] = 3
      text = Press 'spacebar' to continue, or 'r' to retry
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    PolygonComponent tap_flash
      fillColor = white
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.1
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    SoundComponent tap_beep
      forceEndRoutine = False
      sound [set every repeat] = 440
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 0.1
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    CodeComponent sync_code
      Code Type = Py
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      Begin Routine:
        retry = False
      Each Frame:
        if t >= 3.1:  # only after the flash has finished
            keys = sync_resp.getKeys(keyList=['r', 'space'], waitRelease=False)
            for k in keys:
                if k.name == 'r':
                    retry = True
                    continueRoutine = False
                elif k.name == 'space':
                    continueRoutine = False
      End Routine:
        if not retry:
            if tap_flash.tStartRefresh is not None:
                exp_start_abs = core.getAbsTime() - globalClock.getTime()
                thisExp.addData('flash_onset_abs', exp_start_abs + tap_flash.tStartRefresh)
                sync_loop.finished = True
            else:
                # Flash didn't draw — treat as a retry rather than crash
                retry = True
    KeyboardComponent sync_resp
      allowedKeys = 'r','space'
      forceEndRoutine = False
      startVal [time (s)] = 3.0
      store = all keys
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Flow
  Routine intro
  LoopInitiator sync_loop loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine clapperboard
  LoopTerminator sync_loop
  Routine eyelink_setup
  Routine fixation
  Routine eyelink_start
  Routine control_video
  Routine eyelink_stop
  LoopInitiator conditions_loop loopType="TrialHandler"
    conditionsFile = conditions.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'nature')]),
      OrderedDict([('condition', 'urban')]),
      OrderedDict([('condition', 'nature_fractal')]),
      OrderedDict([('condition', 'urban_fractal')])]
    Routine fixation
    Routine eyelink_start_2
    Routine parent_video
    Routine eyelink_stop
    Routine fixation
    LoopInitiator image_loop loopType="TrialHandler"
      conditionsFile = $"stimuli/" + condition + ".csv"
      loopType = sequential
      nReps = 1
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      Routine eyelink_start_image
      Routine slideshow
      Routine eyelink_stop
    LoopTerminator image_loop
  LoopTerminator conditions_loop
  Routine end_experiment
